PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'language': '["English", "Spanish", "German", "French"]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = 1.0000, 1.0000, 1.0000
  expName = Language_localiser_demo
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine language_settings
    RoutineSettingsComponent language_settings
      saveStartStop = False
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    CodeComponent code_py
      Code Type = Py
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      Begin Experiment:
        ## THIS CODE ONLY WORKS IN PYTHON, NOT JAVASCRIPT ##

        # import python package to read Excel file *at the beginning of the experiment*
        import pandas as pd
        # make sure lang_code is defined and set to EN as default
        lang_code = "EN"
        # read excel file with messages according to language codes
        messages_df = pd.read_excel('messages.xlsx')
        # create an empty global dictionary with the messages
        MESSAGES = {}
        # assign each value of language to the corresponding key of language (language code)
        for idx, row in messages_df.iterrows():
            key = row['message']
            MESSAGES[key] = {}
            for col in row.index:
                if col != 'message':
                    MESSAGES[key][col] = row[col]
        # create global variables with the list of messages to be usable throuhgout the experiment
        for key in MESSAGES:
            globals()[key] = MESSAGES[key].get(lang_code, MESSAGES[key]['EN'])  # fallback to English if language is not localised
      Begin Routine:
        # update language code based on the selected language in dialogue box
        if language == expInfo['language']:
            # we 'code' as a variable directly because it's already loaded in the localiser excel sheet
            lang_code = ISO_code
            thisExp.addData("language_code", lang_code)  # add it to output
            # update global variables with new language
            # allow the messages to be used throughout the experiment by making them global variables
            for key in MESSAGES:
                globals()[key] = MESSAGES[key].get(lang_code, MESSAGES[key]['EN']) # defaults to english if something is wrong
    CodeComponent code_js
      Code Type = JS
      disabled = True
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      Begin JS Experiment:
        // THIS CODE DOES NOT WORK!!!!


        // Object that will store all localized messages
        MESSAGES = {};
        lang_code = "EN";  // Default language code
        messagesLoaded = false;  // Flag to check if loading is complete

        // Function to load and parse the messages.csv file
        function loadMessages(callback) {
            fetch("messages.csv")  // Adjust path if needed
                .then(response => response.text())
                .then(text => {
                    let rows = text.trim().split("\n"); // Split by line
                    let headers = rows[0].split(",");   // First row = column headers

                    for (let i = 1; i < rows.length; i++) {
                        let cols = rows[i].split(",");
                        let key = cols[0];  // 'message' key (e.g., welcome_msg)
                        MESSAGES[key] = {};

                        for (let j = 1; j < headers.length; j++) {
                            MESSAGES[key][headers[j]] = cols[j];  // EN, ES, etc.
                        }
                    }
                    messagesLoaded = true;  // Set flag to true once loaded
                    if (callback) callback();  // Run callback if provided
                });
        }

        // Call the function to load the messages at experiment start
        loadMessages();
      Begin JS Routine:
        console.log("MESSAGES:", MESSAGES);
        console.log("lang_code:", lang_code);


        // Check if the language selected in the loop matches the one chosen in the dialogue box
        if (language === expInfo["language"]) {
            lang_code = code;  // 'code' comes from language_localiser.xlsx
            psychoJS.experiment.addData("language_code", lang_code);  // Store it in the data file

            // Update all global message variables based on selected language
            for (var key in MESSAGES) {
            window[key] = MESSAGES[key][lang_code] || MESSAGES[key]['EN'];
            }
        }
      Each JS Frame:
        if (messagesLoaded) {
            continueRoutine = false;
        }
  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    CodeComponent inst_code
      Code Type = Auto->JS
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      Begin Experiment:
        instr_msg = ""
      Begin Routine:
        # get column from excel sheet based on language code
        try:
            instr_msg = eval(f"instr_msg_{lang_code}")
        # default to english if this fails
        except NameError:
            instr_msg = instr_msg_EN
    TextComponent inst_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.0275
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_msg
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    TextComponent inst_adv_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $adv_msg
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    KeyboardComponent inst_adv_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine bye
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    TextComponent bye_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $bye_msg
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    KeyboardComponent by_adv_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine welcome
    RoutineSettingsComponent welcome
      saveStartStop = False
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    TextComponent welcome_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_msg
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    TextComponent welcome_adv_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.045
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $adv_msg
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    KeyboardComponent welcome_adv_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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Flow
  LoopInitiator language_loop loopType="TrialHandler"
    conditionsFile = language_localiser.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'language': 'English', 'ISO_code': 'EN'},
      {'language': 'Spanish', 'ISO_code': 'ES'},
      {'language': 'German', 'ISO_code': 'DE'},
      {'language': 'French', 'ISO_code': 'FR'}]
    Routine language_settings
  LoopTerminator language_loop
  Routine welcome
  LoopInitiator instructions_loop loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'instr_pics': 'images/placeholder.png', 'instr_msg_EN': 'Placeholder text 1', 'instr_msg_ES': 'Texto de referencia 1', 'instr_msg_DE': 'Platzhaltertext 1', 'instr_msg_FR': 'Texte de remplacement 1'},
      {'instr_pics': 'images/placeholder.png', 'instr_msg_EN': 'Placeholder text 2', 'instr_msg_ES': 'Texto de referencia 2', 'instr_msg_DE': 'Platzhaltertext 2', 'instr_msg_FR': 'Texte de remplacement 2'},
      {'instr_pics': 'images/placeholder.png', 'instr_msg_EN': 'Placeholder text 3', 'instr_msg_ES': 'Texto de referencia 3', 'instr_msg_DE': 'Platzhaltertext 3', 'instr_msg_FR': 'Texte de remplacement 3'}]
    Routine instructions
  LoopTerminator instructions_loop
  Routine bye
